CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['This pipeline reads in the multi-channel images, the segmentation masks and pixel probabilities as generated in the previous pipelines to measure cell features.', 'Please select the analysis/cpout folder here.', '', 'Default Input Folder: path/to/analysis/for_cellprofiler', 'Default Output Folder: path/to/analysis/CellProfilerOutput']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Here, metadata from the images (<acname> and <acid>) are matched with image metadata generated during pre-processing (contained in the analysis/cpinp/acquisition_metadata.csv file). At the end of the pipeline, matched information is written out as Image.csv file.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Name>^.*?_ac)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The multi-channel images (stored in analysis/cpout/images), segmentation masks (stored in analysis/cpout/images) and the pixel probabilities (stored in analysis/cpout/probabilities) are read in and matched via their acquisition name (acname) and acquisition ID (acid).']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
    Assign a name to:Images matching rules
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    Match metadata:[{'FullStack': 'Name', 'cellMask': 'Name', 'epMask': 'Name'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_CpSeg_mask")
    Name to assign these images:cellMask
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_full.tiff")
    Name to assign these images:FullStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_full_EP.tiff")
    Name to assign these images:epMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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notes:['The read in segmentation masks are converted to objects while keeping their original labels in place.']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
    Select the input image:cellMask
    Name the output object:cell
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

Threshold:[module_num:6|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
    Select the input image:epMask
    Name the output image:EP
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.9
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
ImageMath:[module_num:7|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:No
    Ignore the image masks?:No
    Name the output image:noEP
    Image or measurement?:Image
    Select the first image:EP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Morph:[module_num:8|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
    Select the input image:noEP
    Name the output image:XYDistEP
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:No

MeasureObjectNeighbors:[module_num:9|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notes:['For each cell its direct neighbors are detected by expanding the cell mask by a defined distance. At the end of the pipeline, the neighbor information is written out in form of an edge list in the Object relationships.csv file.']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
    Select objects to measure:cell
    Select neighboring objects to measure:cell
    Method to determine neighbors:Within a specified distance
    Neighbor distance:8
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityMultichannel:[module_num:10|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notes:['This module measures the object/cell intensities based on the multi-channel images. Further downstream you can select which intensity measures you want to export (default: all). The measurements for each channel will have a number (e.g. _c1, _c2, _c3) corresponding to the plane number. The metals corresponding to the plane/channel number can be found in the _full.csv files in the analysis/images folder.', '', 'You will need to adapt the number of channels according to your dataset here.', '']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
    Select images to measure:FullStack
    Select objects to measure:cell
    How many channels does the image have?:38

MeasureObjectIntensityMultichannel:[module_num:11|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
    Select images to measure:XYDistEP
    Select objects to measure:cell
    How many channels does the image have?:1

MeasureObjectSizeShape:[module_num:12|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notes:['Here, morphological features of the objects are extracted.']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
    Select object sets to measure:cell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:13|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notes:['Here, the cell, image and experiment data is saved as .csv files.', 'The cell.csv file contains single-cell features including intensity and morphological features. You can select a subset of features by setting _Select the measurements to export_ to _Yes_.', 'Note: the intensity values are all scaled by a scaling factor corresponding to the bit depth. This scaling factor can be found in the Image.csv file in the Scaling_FullStack column.', 'For 16-bit unsigned integer images (uint16) values are divided by 2**16 - 1 = 65535.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|analysis/CellProfilerOutput
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:cell|Intensity_MeanIntensity_FullStack_c2,cell|Intensity_MeanIntensity_FullStack_c23,cell|Intensity_MeanIntensity_FullStack_c7,cell|Intensity_MeanIntensity_FullStack_c16,cell|Intensity_MeanIntensity_FullStack_c19,cell|Intensity_MeanIntensity_FullStack_c18,cell|Intensity_MeanIntensity_FullStack_c29,cell|Intensity_MeanIntensity_FullStack_c38,cell|Intensity_MeanIntensity_FullStack_c13,cell|Intensity_MeanIntensity_FullStack_c27,cell|Intensity_MeanIntensity_FullStack_c34,cell|Intensity_MeanIntensity_FullStack_c6,cell|Intensity_MeanIntensity_FullStack_c1,cell|Intensity_MeanIntensity_FullStack_c5,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ExportToSpreadsheet:[module_num:14|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notes:['This module saves the cell neighbor information in form of an edge list as Object relationships.csv file. ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|analysis/CellProfilerOutput
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:cell|Number_Object_Number,cell|AreaShape_Center_Y,cell|AreaShape_Center_X,cell|Neighbors_PercentTouching_8,cell|Neighbors_SecondClosestDistance_8,cell|Neighbors_SecondClosestObjectNumber_8,cell|Neighbors_FirstClosestDistance_8,cell|Neighbors_AngleBetweenNeighbors_8,cell|Neighbors_NumberOfNeighbors_8,cell|Neighbors_FirstClosestObjectNumber_8
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|analysis/CellProfilerOutput
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|FileName_FullStack
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
